PsychoPy2experiment version="2022.2.5"
Settings
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = Surface
  Screen = 1
  Units = height
  Window size (pixels) = [1368, 912]
  expName = Builder_Test
  keyboardBackend = ioHub
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Routines
  Routine Sequence
    ImageComponent Images
      flipHoriz = True
      image [set every repeat] = $s1
      size = [2736,1824]
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.1
      units = pix
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    PolygonComponent Cross
      fillColor = 1.0000, -1.0000, -1.0000
      lineColor = 1.0000, -1.0000, -1.0000
      shape = cross
      size = (0.01, 0.01)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.4
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    PolygonComponent Rectangle
      fillColor = 0.0039, 0.0039, 0.0039
      lineColor = 0.0039, 0.0039, 0.0039
      opacity = 0
      shape = rectangle
      size = (2736, 1824)
      startVal [time (s)] = 0.1
      stopVal [duration (s)] = 0.3
      units = pix
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  Routine Response
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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      text:
        Target present?

        Press Space
    KeyboardComponent key_resp
      allowedKeys = 'y' ,'n'
      correctAns = y
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      store = first key
      storeCorrect = True
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  Routine Preload
    CodeComponent Get_Images_list
      Code Type = Py
      Begin Routine:
        new_data = {'s1':['','','']}
        new_df = pd.DataFrame(new_data)
        new_df.iloc[0:3] = df.iloc[sequence_num*3:sequence_num*3+3]

        random_target = np.random.randint(1,11,1)[0]
        if random_target < 2:
            new_df.iloc[1] = 'Pictures/Target_Post0.tiff'

        new_df.to_csv(r'C:\Users\15202\anaconda3\envs\psychopy\Lib\site-packages\psychopy\experiment\loopTemplate.csv', index = False)

        sequence_num = sequence_num + 1
    ResourceManagerComponent resources
      actionType = Start and Check
      checkAll = False
      forceEndRoutine = False
      resources = ['$s1']
      startVal [time (s)] = 0
  Routine routine_1
  Routine Blank
    PolygonComponent blank
      fillColor = 0.0039, 0.0039, 0.0039
      lineColor = 0.0039, 0.0039, 0.0039
      shape = rectangle
      size = (2736, 1824)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      units = pix
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    PolygonComponent polygon
      fillColor = red
      lineColor = red
      shape = cross
      size = (0.01, 0.01)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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  Routine Introduction
    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text = Intro
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  Routine Shuffle_Images
    CodeComponent code
      Code Type = Py
      Begin Routine:
        import pandas as pd
        df = pd.read_csv(r'C:\Users\15202\anaconda3\envs\psychopy\Lib\site-packages\psychopy\experiment\Picture_list.csv', header = None)
        df = df.sample(frac = 1).reset_index(drop = True)
        sequence_num = 0
  Routine Feedback
  Routine End
Flow
  LoopInitiator Number_of_Repetition loopType="TrialHandler"
    loopType = random
    nReps = 1
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    Routine Introduction
    Routine Shuffle_Images
    LoopInitiator Trials loopType="TrialHandler"
      loopType = sequential
      nReps = 4
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      Routine Preload
      Routine Blank
      LoopInitiator Sequences loopType="TrialHandler"
        conditionsFile = C:/Users/15202/anaconda3/envs/psychopy/Lib/site-packages/psychopy/experiment/loopTemplate.csv
        loopType = random
        nReps = 1
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        conditions:
          [OrderedDict([('s1', 'Pictures/0.tiff')]),
          OrderedDict([('s1', 'Pictures/Target_Post0.tiff')]),
          OrderedDict([('s1', 'Pictures/6.tiff')])]
        Routine Sequence
      LoopTerminator Sequences
      Routine Response
      Routine Feedback
      Routine End
    LoopTerminator Trials
  LoopTerminator Number_of_Repetition
