PsychoPy2experiment version="2022.2.5"
Settings
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = Surface
  Screen = 1
  Units = height
  Window size (pixels) = [1368, 912]
  expName = EEG_Test
  keyboardBackend = ioHub
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Routines
  Routine Response
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = $len_blank_short
      stopVal [duration (s)] = 3
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      text:
        Target?

        Yes? Press y

        No? Press n
    KeyboardComponent key_resp
      allowedKeys = 'y' ,'n'
      correctAns = $cur_correct
      forceEndRoutine = True
      startVal [time (s)] = $len_blank_short
      stopVal [duration (s)] = 3
      store = first key
      storeCorrect = True
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    CodeComponent Calculate_cor
      Code Type = Py
      End Routine:
        if key_resp.corr:
            num_correct += 1        #Record how many times the participants reponse correctly
            trial_correct = "CORRECT!"
        else:
            trial_correct = "WRONG!"
  Routine Introduction
    TextComponent Intro
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = Intro
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    TextComponent Instruction_content
      letterHeight = 0.05
      startVal [time (s)] = 3
      text = $instruction_text
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    KeyboardComponent Instruction_response
      allowedKeys = 'return','space'
      forceEndRoutine = True
      startVal [time (s)] = 3.0
      store = first key
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  Routine Feedback
    CodeComponent accuracy_rate
      Code Type = Py
      Begin Routine:
        num_correct = round( (num_correct / trials_per_block) * 100 , 2)       #Calculate accuracy rate
        accuracy_rate = str("Your accuracy rate is ") + str(num_correct) + str("%")
    TextComponent text_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      text [set every repeat] = $accuracy_rate
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  Routine End
    CodeComponent block_end
      Code Type = Py
      Begin Routine:
        cur_block = int(eeg_trial_num / trials_per_block)
        block_end_text = "This the end of block " + str(cur_block)
    TextComponent end_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text [set every repeat] = $block_end_text
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    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 3
      stopVal [duration (s)] = 10.0
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      text:
        Please take a rest for 10 seconds

        Then press ENTER to continue
    KeyboardComponent key_resp_2
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 13
      stopVal [duration (s)] = 3
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  Routine Initialization
    CodeComponent Initialization_code
      Code Type = Py
      Begin Experiment:
        import pandas as pd
        from copy import deepcopy

        #Set the global file path
        #files_path = r"C:\Users\15202\OneDrive\C_\University of Amsterdam\Intern\\"
        files_path= os.path.join("C:\\", "Users", "15202", "OneDrive", "C_", "University of Amsterdam", "Intern")

        with open(os.path.join(files_path, "Instruction.md"), 'r') as instruction_file:     #Load the instruction markdown file
            instruction_text = instruction_file.read()          #save the text

        eeg_trial_num = 0   #Track with the current trial
        images_per_trial = 20
        trials_per_block = 5
        blocks_per_repetition = 2
        total_repetition = 1
        total_blocks = blocks_per_repetition * total_repetition
        max_trial = trials_per_block * total_blocks #The maximum of trials

        orig_image_width = 5496
        orig_image_height= 3672
        image_w = win.size[0]           #Set the screen width as the width of images
        aspect_ratio = orig_image_height/orig_image_width       #Set the aspect ratio of image
        image_h = int(image_w * aspect_ratio)     #Set the height of images

        len_blank_long = 3          #The length of blank screen before showing any images
        len_blank_short = 0.3       #The length of blank screen after every images

        #Get the list of all images' file name
        Images_name_list = os.listdir(os.path.join(files_path, "Stimuli"))

        # NOTICE: The Images from the list are not in numerical order,
        # i.e. the third element is "10.tiff" but not "2.tiff"
        # In the testing case (and also formal experiment), this would not cause any problem.
        # However, if we need to use these indices to track with specific images,
        # use the command below to sort the list
        # (make sure the prefix of file name is number only).

        #sorted(Images_name_list, key = lambda item: int(item.split(".")[0]))
  Routine Correctness_Initialization
    CodeComponent Cor_initialization
      Code Type = Py
      Begin Routine:
        num_correct = 0     #For every block, initialize the number of correct answers
  Routine Preload_and_Blank_Screen
    ImageComponent Images
      flipHoriz = True
      size = image_w, image_h
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.1
      units = pix
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    PolygonComponent blank_screen
      fillColor = gray
      lineColor = gray
      shape = rectangle
      size = image_w, image_h
      startVal [condition] = $Images.status == FINISHED
      stopVal [duration (s)] = 0.3
      units = pix
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    PolygonComponent cross
      fillColor = red
      lineColor = red
      shape = cross
      size = (0.01, 0.01)
      startVal [time (s)] = 0
      stopVal [condition] = $blank_screen.status == FINISHED
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    CodeComponent Update_image
      Code Type = Py
      End Routine:
        Image_index += 1
        if Image_index < images_per_trial:
            Images = Image_loaded_list[Image_index]

        #print(Image_index)
  Routine Load_current_trial_info
    CodeComponent Load_cur_trial_infos
      Code Type = Py
      Begin Routine:
        #Load the randomized images matrix,
        #each row of the matrix represents a sequence of images,
        #each element should contain a image number,
        #The code below loads the corresponding row of trial from the matrix,
        #please change the path below
        cur_sequence = pd.read_csv(os.path.join(files_path, "Randomized matrix.csv"), header = None, skiprows = list(range(0,eeg_trial_num)) + list(range(eeg_trial_num+1,max_trial)) )
        cur_sequence_images = [Images_name_list[cur_sequence.iloc[0, i]] for i in range(images_per_trial) ]     #Use the indexs to get the images' name
        cur_sequence_images = [ "Stimuli\\" + i for i in cur_sequence_images]

        #Load the csv file which contain the correct answers for each trial,
        #each row contains one answer for a trial, the value should be either 'y' or 'n',
        #The code below loads the corresponding row of trial from the file,
        #please change the path below
        cur_correct = pd.read_csv(os.path.join(files_path, "Correct_answers.csv"), header = None, skiprows = list(range(0,eeg_trial_num)) + list(range(eeg_trial_num+1,max_trial)) )
        cur_correct = cur_correct[0][0]     #Get the correct answer
        eeg_trial_num += 1      #Increase the trial index
    PolygonComponent blank_screen_2
      fillColor = gray
      lineColor = gray
      shape = rectangle
      size = image_w, image_h
      startVal [time (s)] = 0.0
      stopVal [duration (frames)] = 1
      units = pix
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    PolygonComponent cross_2
      fillColor = red
      lineColor = red
      shape = cross
      size = (0.01, 0.01)
      startVal [time (s)] = 0.0
      stopVal [duration (frames)] = 1
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    CodeComponent generate_csv
      Code Type = Py
      End Routine:
        Image_loaded_list = []
        for i in range(20):

            new_image = visual.ImageStim(
            win=win,
            name='Images'+ str(i), units='pix',
            image=None, mask=None, anchor='center',
            ori=0.0, pos=(0, 0), size=[image_w, image_h],
            color=[1,1,1], colorSpace='rgb', opacity=None,
            flipHoriz=True, flipVert=False,
            texRes=128.0, interpolate=True, depth=-1.0)

            new_image.setImage(cur_sequence_images[i])
            Image_loaded_list.append(new_image)

        Image_index = 0
        Images = Image_loaded_list[Image_index]

        #print("Finished in ", t, "seconds")

        #cur_trial_data = {'current_images_list' : cur_sequence_images, 'blank_len' : [len_blank_long] + [len_blank_short] * (images_per_trial-1) }
        #cur_sequence_images = pd.DataFrame(cur_trial_data)      #Convert the sequence into DataFrame

        #Save the current images list into the loop file
        #cur_sequence_images.to_csv(os.path.join(files_path, "loopTemplate.csv"),index=False)
  Routine Trial_Feedback
    TextComponent trial_feedback
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.4
      text [set every repeat] = $trial_correct
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Flow
  Routine Initialization
  LoopInitiator Repetition loopType="TrialHandler"
    isTrials = False
    loopType = sequential
    nReps = total_repetition
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    Routine Introduction
    LoopInitiator Blocks loopType="TrialHandler"
      isTrials = False
      loopType = sequential
      nReps = blocks_per_repetition
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      Routine Correctness_Initialization
      LoopInitiator Trials loopType="TrialHandler"
        isTrials = False
        loopType = sequential
        nReps = trials_per_block
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        Routine Load_current_trial_info
        LoopInitiator Sequences loopType="TrialHandler"
          loopType = sequential
          nReps = images_per_trial
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          Routine Preload_and_Blank_Screen
        LoopTerminator Sequences
        Routine Response
        Routine Trial_Feedback
      LoopTerminator Trials
      Routine Feedback
      Routine End
    LoopTerminator Blocks
  LoopTerminator Repetition
