PsychoPy2experiment version="2022.2.5"
Settings
  Data file delimiter = comma
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Save hdf5 file = True
  Screen = 3
  Units = height
  Window size (pixels) = [2560, 1440]
  elAddress = 100.1.1.1
  elDataFiltering = FILTER_LEVEL_2
  elLiveFiltering = FILTER_LEVEL_OFF
  elModel = EYELINK 1000 DESKTOP
  elPupilAlgorithm = CENTROID_FIT
  elPupilMeasure = PUPIL_DIAMETER
  elSampleRate = 500
  elSimMode = False
  elTrackEyes = RIGHT_EYE
  elTrackingMode = PUPIL_CR_TRACKING
  expName = FMG1441_Object_Classification_EEG
  eyetracker = SR Research Ltd
  keyboardBackend = ioHub
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Routines
  Routine Response
    TextComponent response_text
      letterHeight = 0.05
      startVal [time (s)] = 0
      stopVal [duration (s)] = 3
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      text:
        Target?


        Yes?:                 No?:
    PolygonComponent blue_circle
      fillColor = -1.0000, -1.0000, 1.0000
      lineColor = blue
      pos = (-0.04, -0.08)
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 3
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    PolygonComponent Green_circle
      fillColor = -0.0039, 1.0000, -1.0000
      lineColor = -0.0039, 1.0000, -1.0000
      pos = (0.34, -0.08)
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 3
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    KeyboardComponent key_resp
      allowedKeys = 'l', 'k'
      correctAns = $cur_correct
      forceEndRoutine = True
      startVal [time (s)] = 0
      stopVal [time (s)] = 3
      store = first key
      storeCorrect = True
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    ParallelOutComponent response_triger
      address = 0x4050
      register = EIO
      startData = 253
      startVal [condition] = $response_text.status == STARTED
      stopVal [duration (frames)] = 1
      syncScreen = True
      syncScreenRefresh = True
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    CodeComponent Calculate_cor
      Code Type = Py
      End Routine:
        trial_correct = "WRONG!"

        if key_resp.corr:
            num_correct += 1        #Record how many times the participants reponse correctly
            trial_correct = "CORRECT!"
        else:
            trial_correct = "WRONG!"
  Routine Introduction
    TextComponent Intro
      letterHeight = 0.05
      startVal [time (s)] = 0
      stopVal [duration (s)] = 3
      text = Intro
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    TextComponent Instruction_content
      letterHeight = 0.05
      startVal [time (s)] = 3
      stopVal [condition] = $Instruction_response.status == FINISHED
      wrapWidth = 1.7
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      text:
        In this experiment, you will be rapidly presented with sequences of images.

        Most sequences contain only images of outdoor scenes, while other sequences contain outdoor scenes and one indoor scene.

        Please fixate the red cross in the center the entire time and try not to blink during the sequence.

        Press SPACE to continue
    KeyboardComponent Instruction_response
      allowedKeys = 'space'
      forceEndRoutine = False
      startVal [time (s)] = 3.0
      stopVal [condition] = $Instruction_response.keys != []
      store = first key
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    TextComponent Instruction_content_2
      letterHeight = 0.05
      startVal [condition] = $Instruction_response.status == FINISHED
      stopVal [condition] = $Instruction_response_2.status == FINISHED
      wrapWidth = 1.6
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      text:
        At the end of each sequence, you will be asked whether there was an indoor scene present in the current sequence.

        Use your RIGHT hand to press the BLUE button for YES, and the GREEN button for NO.

        Press SPACE to continue
    KeyboardComponent Instruction_response_2
      allowedKeys = 'space'
      forceEndRoutine = False
      startVal [condition] = $Instruction_content_2.status == STARTED
      stopVal [condition] = $Instruction_response_2.keys != []
      store = first key
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    TextComponent Instruction_content_3
      letterHeight = 0.05
      startVal [condition] = $Instruction_response_2.status == FINISHED
      stopVal [condition] = $Instruction_response_3.status == FINISHED
      text = Press SPACE to start with some practice trials before starting the experiment.
      wrapWidth = 1.6
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    KeyboardComponent Instruction_response_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [condition] = $Instruction_content_3.status == STARTED
      stopVal [condition] = $Instruction_response_3.keys != []
      store = first key
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  Routine Initialization
    CodeComponent Initialization_code
      Code Type = Py
      Begin Experiment:
        import pandas as pd
        from copy import deepcopy
        import random
        import sys
        import gc
        import array

        #Set the global file path
        files_path= os.path.join("D:\\", "Users", "Niklas", "eeg_experiment-main")
        Trial_start = expInfo['participant'].split("_")
        expInfo['participant'] = Trial_start[0] + "_" + Trial_start[1]
        matrix_name = expInfo['participant'] + "_randomized_matrix_702.csv"
        save_to_data = pd.read_csv(os.path.join(files_path, "Subject_matrix", matrix_name), header = None)
        save_to_data.to_csv(os.path.join(files_path, "data", expInfo['date']+"_"+matrix_name),index=False, header = None)
        #os.makedirs(os.path.join(files_path, expInfo['participant']), exist_ok=True)
        #images_path = os.path.join("Y:\\", "Projects", "2023_Scholte_FMG1441", "Stimuli")
        #newFileName = os.path.join("Y:\\", "Projects", "2023_Scholte_FMG1441", "Data") + u'data/%s_%s_%s' % (expInfo['participant'], expName, expInfo['date'])

        #_thisDir = os.path.dirname(os.path.abspath(r"Y:\Projects\2023_Scholte_FMG1441\Data\pilot"))
        #filename = _thisDir + os.sep + u'data/%s_%s_%s' % (expInfo['participant'], expName, expInfo['date'])
        #thisExp.dataFileName = filename
        #logFile.dataFileName = filename

        with open(os.path.join(files_path, "Instruction.md"), 'r') as instruction_file:     #Load the instruction markdown file
            instruction_text = instruction_file.read()          #save the text

        eeg_trial_num = 0   #Track with the current trial
        training_trial = 0

        cur_triger = 1
        images_per_trial = 20
        trials_per_block = 30
        blocks_per_repetition = 8
        total_repetition = 1
        total_blocks = blocks_per_repetition * total_repetition
        max_trial = trials_per_block * total_blocks #The maximum of trials
        Training_Repetition = 9999
        number_of_sub = len(os.listdir(os.path.join(files_path, "Subject_matrix"))) - 2    #Get the amount of subjets

        orig_image_width = 2155
        orig_image_height= 1440
        image_h = win.size[1]           #Set the screen width as the width of images
        aspect_ratio = orig_image_width/orig_image_height       #Set the aspect ratio of image
        image_w = int(image_h * aspect_ratio)     #Set the height of images

        Image_loaded_list = []
        for i in range(images_per_trial):
            new_images = visual.ImageStim(
                    win=win,
                    name='Images', units='pix',
                    image=None, mask=None, anchor='center',
                    ori=0.0, pos=(0, 0), size=[image_w, image_h],
                    color=[1,1,1], colorSpace='rgb', opacity=None,
                    flipHoriz=True, flipVert=False,
                    texRes=128.0, interpolate=True, depth=-1.0)
            Image_loaded_list.append(new_images)
            del new_images

        #len_blank_long = 3          #The length of blank screen before showing any images
        #len_blank_short = 0.3       #The length of blank screen after every images

        #Get the list of all images' file name
        #Images_name_list = os.listdir(images_path)
        Images_name_list = os.listdir(os.path.join(files_path, "Stimuli"))



        # NOTICE: The Images from the list are not in numerical order,
        # i.e. the third element is "10.tiff" but not "2.tiff"
        # In the testing case (and also formal experiment), this would not cause any problem.
        # However, if we need to use these indices to track with specific images,
        # use the command below to sort the list
        # (make sure the prefix of file name is number only).

        #sorted(Images_name_list, key = lambda item: int(item.split(".")[0]))

        num_correct = 0     #initialize the number of correct answers

        if len(Trial_start) > 2:
            start_from = int(Trial_start[2])
            eeg_trial_num = int(start_from / trials_per_block) * trials_per_block
            blocks_per_repetition -= int(start_from / trials_per_block)
            if start_from % trials_per_block == 0:
                eeg_trial_num -= trials_per_block
                trials_per_block += 1


        #print("#Block: ", int(eeg_trial_num/trials_per_block)+1, "\t#Trial: ", int(eeg_trial_num % trials_per_block) ,"\tTotal trials: ", eeg_trial_num+1, "/", max_trial)
        #sys.stdout.flush()
    EyetrackerRecordComponent etRecord_start
      actionType = Start Only
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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  Routine Preload_and_Blank_Screen
    ImageComponent Images
      flipHoriz = True
      size = image_w, image_h
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.1
      units = pix
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    ParallelOutComponent Image_trigger
      address = 0x4050
      register = EIO
      startData = cur_triger
      startVal [condition] = $Images.status == STARTED
      stopVal [duration (frames)] = 1
      syncScreen = True
      syncScreenRefresh = True
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    PolygonComponent blank_screen
      fillColor = gray
      lineColor = gray
      shape = rectangle
      size = image_w, image_h
      startVal [condition] = $Images.status == FINISHED
      stopVal [duration (s)] = 0.3
      units = pix
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    ParallelOutComponent gray_trigger
      address = 0x4050
      register = EIO
      startData = gray_trigger_index
      startVal [condition] = $blank_screen.status == STARTED
      stopVal [duration (frames)] = 1
      syncScreen = True
      syncScreenRefresh = True
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    PolygonComponent cross
      fillColor = red
      lineColor = red
      shape = cross
      size = (0.01, 0.01)
      startVal [time (s)] = 0.0
      stopVal [condition] = $blank_screen.status == FINISHED
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    CodeComponent trigger_update
      Code Type = Py
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      End Routine:
        #gray_trigger_index = 252
        if cur_triger >= 250:
            cur_triger = 1
        else:
            cur_triger += 1

        Image_index += 1

        del Preload_and_Blank_ScreenComponents[0]
        del Preload_and_Blank_ScreenComponents
        del currentLoop
        if Image_index < images_per_trial:
            del Images
            Images = Image_loaded_list[Image_index]

        #print(Image_index)
  Routine Load_current_trial_info
    CodeComponent Load_cur_trial_infos
      Code Type = Py
      Begin Routine:
        Pause_key_resp.corr = 0
        Resume_key_resp.corr = 0
        #Load the randomized images matrix,
        #each row of the matrix represents a sequence of images,
        #each element should contain a image number,
        #The code below loads the corresponding row of trial from the matrix,
        #please change the path below
        cur_sequence = pd.read_csv(os.path.join(files_path, "Subject_matrix", matrix_name), header = None, skiprows = list(range(0,eeg_trial_num)) + list(range(eeg_trial_num+1,max_trial)) ).iloc[0]
        #cur_sequence_images = cur_sequence.iloc[0]   #Use the indexs to get the images' name
        #cur_sequence_images = [ os.path.join(images_path, i) for i in cur_sequence_images]

        #Load the csv file which contain the correct answers for each trial,
        #each row contains one answer for a trial, the value should be either 'y' or 'n',
        #The code below loads the corresponding row of trial from the file,
        #please change the path below
        cur_correct = pd.read_csv(os.path.join(files_path, "Correct_answers_702.csv"), header = None, skiprows = list(range(0,eeg_trial_num)) + list(range(eeg_trial_num+1,max_trial)) ).iloc[0][0]
        #cur_correct = cur_correct_list[0][0]     #Get the correct answer
        #eeg_trial_num += 1      #Increase the trial index

        gray_trigger_index = 251

        print("#Block: ", int(eeg_trial_num/trials_per_block)+1, "\t#Trial: ", int(eeg_trial_num % trials_per_block) ,"\tTotal trials: ", eeg_trial_num+1, "/", max_trial)
        sys.stdout.flush()
        eeg_trial_num += 1
    PolygonComponent Long_gray_screen
      fillColor = gray
      lineColor = gray
      shape = rectangle
      size = image_w, image_h
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 2
      units = pix
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    ParallelOutComponent First_p_port_2
      address = 0x4050
      register = EIO
      startData = gray_trigger_index
      startVal [condition] = $Long_gray_screen.status == STARTED
      stopVal [duration (frames)] = 1
      syncScreen = True
      syncScreenRefresh = True
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    PolygonComponent cross_2
      fillColor = red
      lineColor = red
      shape = cross
      size = (0.01, 0.01)
      startVal [time (s)] = 0.0
      stopVal [condition] = $Long_gray_screen.status == FINISHED
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    CodeComponent Preload_Images
      Code Type = Py
      End Routine:
        for i in range(images_per_trial):
            Image_loaded_list[i].setImage(cur_sequence[i])

        Image_index = 0
        del Images
        Images = Image_loaded_list[Image_index]

        #cur_trial_data = {'current_images_list' : cur_sequence_images, 'blank_len' : [len_blank_long] + [len_blank_short] * (images_per_trial-1) }
        #cur_sequence_images = pd.DataFrame(cur_trial_data)      #Convert the sequence into DataFrame
        #
        ##Save the current images list into the loop file
        #cur_sequence_images.to_csv(os.path.join(files_path, "loopTemplate.csv"),index=False)
        gray_trigger_index = 252
  Routine Trial_Feedback
    TextComponent trial_feedback
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.4
      text [set every repeat] = $trial_correct
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    KeyboardComponent Pause_key_resp
      allowedKeys = 'q'
      correctAns = $'q'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.4
      store = first key
      storeCorrect = True
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    CodeComponent Free_Memeory
      Code Type = Py
      End Routine:
        #while len(Image_loaded_list) > 0:
        #    del Image_loaded_list[0]

        for i in range(images_per_trial):
            del cur_sequence[i]

        del cur_sequence
        del cur_correct
        del Image_index
        gc.collect()
  Routine End_of_Block
    CodeComponent block_end
      Code Type = Py
      Begin Routine:
        cur_block = int(eeg_trial_num / trials_per_block)
        block_end_text = "This is the end of block " + str(cur_block)

        num_correct = 0     #initialize the number of correct answers
    TextComponent text_4
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text [set every repeat] = $block_end_text
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    TextComponent Rest
      letterHeight = 0.05
      startVal [time (s)] = 3
      stopVal [duration (s)] = 45
      text = Please take a rest for at leat 45 seconds
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    TextComponent PressKey_to_Continue
      letterHeight = 0.05
      startVal [time (s)] = 48
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      text:
        Please take a rest for at leat 45 seconds


        Press SPACE to continue
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 48
      store = first key
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  Routine End_of_experiment
    EyetrackerRecordComponent etRecord_end
      actionType = Stop Only
      stopVal [duration (s)] = 1.0
      syncScreenRefresh = False
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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      text:
        This is the end of experiment

        Thank you so much for participating!
  EyetrackerCalibrationRoutine calibration
    borderColor = black
    borderWidth = 2
    colorSpace = rgb
    expandDur = 1
    expandScale = 1.5
    innerBorderColor = black
    innerBorderWidth = 2
    innerFillColor = red
    innerRadius = 0.0035
    movementAnimation = True
    movementDur = 1.0
    outerRadius = 0.01
    progressMode = time
    randomisePos = True
    targetDelay = 1.0
    targetDur = 1.5
    targetLayout = FIVE_POINTS
    textColor = white
    units = from exp settings
  Routine Block_Feedback
    CodeComponent accuracy_rate
      Code Type = Py
      Begin Routine:
        num_correct = round( (num_correct / trials_per_block) * 100 , 2)       #Calculate accuracy rate
        accuracy_rate = str("Your accuracy rate is ") + str(num_correct) + str("%")
    TextComponent text_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      text [set every repeat] = $accuracy_rate
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  Routine Training
    ImageComponent Training_Images
      flipHoriz = True
      size = image_w, image_h
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.1
      units = pix
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    PolygonComponent Training_GrayScreen
      fillColor = gray
      lineColor = gray
      shape = rectangle
      size = image_w, image_h
      startVal [condition] = $Training_Images.status == FINISHED
      stopVal [duration (s)] = 0.3
      units = pix
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    PolygonComponent Training_Cross
      fillColor = red
      lineColor = red
      shape = cross
      size = (0.01, 0.01)
      startVal [time (s)] = 0.0
      stopVal [condition] = $Training_GrayScreen.status == FINISHED
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    CodeComponent Update_Training_Images
      Code Type = Py
      End Routine:
        Image_index += 1

        del TrainingComponents[0]
        del TrainingComponents
        del currentLoop
        if Image_index < images_per_trial:

            del Training_Images
            Training_Images = Image_loaded_list[Image_index]
  Routine Training_Preload_info
    CodeComponent Training_preload
      Code Type = Py
      Begin Routine:
        #Load the randomized images matrix,
        #each row of the matrix represents a sequence of images,
        #each element should contain a image number,
        #The code below loads the corresponding row of trial from the matrix,
        #please change the path below
        training_trial += 1
        if training_trial > 2:
            training_trial = 1
        training_matrix_name = "sub_" + str(random.randint(0,number_of_sub)) + "_randomized_matrix_702.csv"
        cur_sequence = pd.read_csv(os.path.join(files_path, "Subject_matrix", training_matrix_name), header = None, skiprows = list(range(0,training_trial)) + list(range(training_trial+1,max_trial)) ).iloc[0]
        #cur_sequence_images = cur_sequence.iloc[0]   #Use the indexs to get the images' name

        #Load the csv file which contain the correct answers for each trial,
        #each row contains one answer for a trial, the value should be either 'y' or 'n',
        #The code below loads the corresponding row of trial from the file,
        #please change the path below
        cur_correct = pd.read_csv(os.path.join(files_path, "Correct_answers_702.csv"), header = None, skiprows = list(range(0,training_trial)) + list(range(training_trial+1,max_trial)) ).iloc[0][0]
        #cur_correct = cur_correct_list[0][0]     #Get the correct answer
    PolygonComponent Training_Long_gray_screen
      fillColor = gray
      lineColor = gray
      shape = rectangle
      size = image_w, image_h
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 2
      units = pix
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    PolygonComponent Training_Long_Cross
      fillColor = red
      lineColor = red
      shape = cross
      size = (0.01, 0.01)
      startVal [time (s)] = 0.0
      stopVal [condition] = $Training_Long_gray_screen.status == FINISHED
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    CodeComponent Trainging_Preload_Images
      Code Type = Py
      End Routine:
        for i in range(images_per_trial):
            Image_loaded_list[i].setImage(cur_sequence[i])

        Image_index = 0
        del Training_Images
        Training_Images = Image_loaded_list[Image_index]

        #cur_trial_data = {'current_images_list' : cur_sequence_images, 'blank_len' : [len_blank_long] + [len_blank_short] * (images_per_trial-1) }
        #cur_sequence_images = pd.DataFrame(cur_trial_data)      #Convert the sequence into DataFrame
        #
        ##Save the current images list into the loop file
        #cur_sequence_images.to_csv(os.path.join(files_path, "loopTemplate.csv"),index=False)
  Routine Training_Responses
    TextComponent Training_Responses_Text
      letterHeight = 0.05
      startVal [time (s)] = 0
      stopVal [duration (s)] = 3
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      text:
        Target?


        Yes?:                 No?:
    PolygonComponent Training_Blue_Circle
      fillColor = -1.0000, -1.0000, 1.0000
      lineColor = blue
      pos = (-0.04, -0.08)
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 3
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    PolygonComponent Training_Green_Circle
      fillColor = -0.0039, 1.0000, -1.0000
      lineColor = -0.0039, 1.0000, -1.0000
      pos = (0.34, -0.08)
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 3
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    KeyboardComponent Training_Key_Response
      allowedKeys = 'l', 'k'
      correctAns = $cur_correct
      forceEndRoutine = True
      startVal [time (s)] = 0
      stopVal [time (s)] = 3
      store = first key
      storeCorrect = True
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    CodeComponent Training_Calculate_Corr
      Code Type = Py
      End Routine:
        trial_correct = "WRONG!"
        if Training_Key_Response.corr:
            trial_correct = "CORRECT!"
        else:
            trial_correct = "WRONG!"
  Routine Training_Feedback
    TextComponent Training_Trial_Feedback
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.4
      text [set every repeat] = $trial_correct
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    CodeComponent Free_Memory_Training
      Code Type = Py
      End Routine:
        #while len(Image_loaded_list) > 0:
        #    del Image_loaded_list[0]

        for i in range(images_per_trial):
            del cur_sequence[i]

        del training_matrix_name
        del cur_sequence
        del cur_correct
        del Image_index

        gc.collect()
  EyetrackerValidationRoutine validation
    borderColor = black
    borderWidth = 2
    colorSpace = rgb
    cursorFillColor = red
    expandDur = 1
    expandScale = 1.5
    innerBorderColor = black
    innerBorderWidth = 2
    innerFillColor = red
    innerRadius = 0.0035
    movementAnimation = True
    movementDur = 1.0
    outerRadius = 0.01
    progressMode = time
    randomisePos = True
    saveAsImg = False
    showResults = False
    targetDelay = 1.0
    targetDur = 1.5
    targetLayout = FIVE_POINTS
    targetPositions = NINE_POINTS
    textColor = auto
    units = from exp settings
  Routine End_of_Training_Start_Experiment
    TextComponent end_of_training
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        This is the end of practice trials

        Press R to retry the practice trials

        Press SPACE to go into the formal experiment
    KeyboardComponent Training_End
      allowedKeys = 'space', 'r'
      correctAns = $'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = first key
      storeCorrect = True
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    CodeComponent Training_End_2
      Code Type = Py
      End Routine:
        if Training_End.corr:
            Training_Blocks.finished = True
  Routine Pause
    TextComponent Pause_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [condition] = $Resume_key_resp.status == FINISHED
      text = Paused by the Researcher
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    KeyboardComponent Resume_key_resp
      allowedKeys = 'r'
      correctAns = $'r'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      store = first key
      storeCorrect = True
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    CodeComponent End_pause
      Code Type = Py
      End Routine:
        if Resume_key_resp.corr == 1:
            Pause_loop.finished = True
  Routine Start_EEG_Recording
    ParallelOutComponent Start_EEG_trigger
      address = 0x4050
      register = EIO
      startData = 254
      startVal [time (s)] = 0.0
      stopVal [duration (frames)] = 1
      syncScreen = True
      syncScreenRefresh = True
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Flow
  EyetrackerCalibrationRoutine calibration
  EyetrackerValidationRoutine validation
  Routine Initialization
  Routine Introduction
  Routine Start_EEG_Recording
  LoopInitiator Training_Blocks loopType="TrialHandler"
    isTrials = False
    loopType = sequential
    nReps = Training_Repetition
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    LoopInitiator Training_Trials loopType="TrialHandler"
      loopType = sequential
      nReps = 2
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      Routine Training_Preload_info
      LoopInitiator Training_Sequences loopType="TrialHandler"
        loopType = sequential
        nReps = 20
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        Routine Training
      LoopTerminator Training_Sequences
      Routine Training_Responses
      Routine Training_Feedback
    LoopTerminator Training_Trials
    Routine End_of_Training_Start_Experiment
  LoopTerminator Training_Blocks
  LoopInitiator Blocks loopType="TrialHandler"
    loopType = sequential
    nReps = blocks_per_repetition
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    LoopInitiator Trials loopType="TrialHandler"
      loopType = sequential
      nReps = trials_per_block
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      Routine Load_current_trial_info
      LoopInitiator Sequences loopType="TrialHandler"
        loopType = sequential
        nReps = images_per_trial
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        Routine Preload_and_Blank_Screen
      LoopTerminator Sequences
      Routine Response
      Routine Trial_Feedback
      LoopInitiator Pause_loop loopType="TrialHandler"
        loopType = sequential
        nReps = Pause_key_resp.corr * 10000
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        Routine Pause
      LoopTerminator Pause_loop
    LoopTerminator Trials
    Routine Block_Feedback
    Routine End_of_Block
  LoopTerminator Blocks
  Routine End_of_experiment
