PsychoPy2experiment version="2022.2.5"
Settings
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = test
  keyboardBackend = ioHub
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Routines
  Routine trial
    CodeComponent code
      Code Type = Py
      Begin Routine:
        import pandas as pd
        from copy import deepcopy
        import random
        import sys
        import gc

        files_path= os.path.join("D:\\", "Users", "Niklas", "eeg_experiment-main")
        matrix_name = expInfo['participant'] + "_randomized_matrix_702.csv"

        with open(os.path.join(files_path, "Instruction.md"), 'r') as instruction_file:     #Load the instruction markdown file
            instruction_text = instruction_file.read()          #save the text

           #Track with the current trial
        training_trial = 0

        cur_triger = 0
        images_per_trial = 20
        trials_per_block = 30
        blocks_per_repetition = 8
        total_repetition = 1
        total_blocks = blocks_per_repetition * total_repetition
        max_trial = trials_per_block * total_blocks #The maximum of trials
        Training_Repetition = 9999
        number_of_sub = len(os.listdir(os.path.join(files_path, "Subject_matrix")))     #Get the amount of subjets

        orig_image_width = 2155
        orig_image_height= 1440
        image_h = win.size[1]           #Set the screen width as the width of images
        aspect_ratio = orig_image_width/orig_image_height       #Set the aspect ratio of image
        image_w = int(image_h * aspect_ratio)     #Set the height of images




        for eeg_trial_num in range(240):
            Image_loaded_list = []
            cur_sequence = pd.read_csv(os.path.join(files_path, "Subject_matrix", matrix_name), header = None, skiprows = list(range(0,eeg_trial_num)) + list(range(eeg_trial_num+1,max_trial)) )
            cur_sequence_images = cur_sequence.iloc[0]   #Use the indexs to get the images' name
            for i in range(20):
                new_image = visual.ImageStim(
                win=win,
                name='Images'+ str(i), units='pix',
                image=None, mask=None, anchor='center',
                ori=0.0, pos=(0, 0), size=[image_w, image_h],
                color=[1,1,1], colorSpace='rgb', opacity=None,
                flipHoriz=True, flipVert=False,
                texRes=128.0, interpolate=True, depth=-1.0)

                new_image.setImage(cur_sequence_images[i])
                Image_loaded_list.append(new_image)
        #        del new_image
            print("#Block: ", int(eeg_trial_num/trials_per_block)+1, "\t#Trial: ", int(eeg_trial_num % trials_per_block) ,"\tTotal trials: ", eeg_trial_num+1, "/", max_trial)
            sys.stdout.flush()
            del cur_sequence
            del cur_sequence_images
            del Image_loaded_list
            gc.collect()
Flow
  Routine trial
